CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI_")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "red")
    Name to assign these images:HMGN5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DNA
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:120
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:HMGN5
    Name the output image:IllumRed
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:DNA
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Select the input image:HMGN5
    Name the output image:CorrRed
    Select the illumination function:IllumRed
    Select how the illumination function is applied:Divide

RescaleIntensity:[module_num:8|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
    Select the input image:CorrBlue
    Name the output image:RescaleBlue
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:RescaleBlue
    Name the primary objects to be identified:Nuceli
    Typical diameter of objects, in pixel units (Min,Max):20,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Nuceli
    Calculate the Zernike features?:No

FilterObjects:[module_num:11|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
    Select the objects to filter:Nuceli
    Name the output objects:FilterNucs
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

RescaleIntensity:[module_num:12|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
    Select the input image:CorrRed
    Name the output image:RescaleRed
    Rescaling method:Stretch each image to use the full intensity range
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
MeasureObjectIntensity:[module_num:13|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
    Hidden:1
    Select an image to measure:RescaleRed
    Select objects to measure:FilterNucs

ClassifyObjects:[module_num:14|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:FilterNucs
    Select the measurement to classify by:Intensity_MeanIntensity_RescaleRed
    Select bin spacing:Evenly spaced bins
    Number of bins:10
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_FilterNucs,Image|Count_Nuceli,Image|Classify_Intensity_MeanIntensity_RescaleRed_Bin_10_NumObjectsPerBin,Image|Classify_Intensity_MeanIntensity_RescaleRed_Bin_10_PctObjectsPerBin,Image|Classify_Intensity_MeanIntensity_RescaleRed_Bin_1_NumObjectsPerBin,Image|Classify_Intensity_MeanIntensity_RescaleRed_Bin_1_PctObjectsPerBin,Image|Classify_Intensity_MeanIntensity_RescaleRed_Bin_3_NumObjectsPerBin,Image|Classify_Intensity_MeanIntensity_RescaleRed_Bin_3_PctObjectsPerBin,Image|Classify_Intensity_MeanIntensity_RescaleRed_Bin_2_NumObjectsPerBin,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:HMGN5_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
